# WARNING: This is an automatically generated file and will be overwritten
#          by CellBlender on the next model export.
#TODO
#figure out this option
# File uses standard MCell units for bimolecular reactions (M^-1*s^-1 and um^2*N^-1*s^-1).
# When used with MCell, global option Model.config.use_bng_units must be set to False.
# WARNING: Simulation with BioNetGen won't produce correct results because BioNetGen uses different units than MCell.
#TODO:
#remove exponential decay of Ca conc
#add calcium buffers
#Add calmodulin ffs
# SERCA to SERCA3
#RyR3 in the spine
#RyR2 in the dendrite
begin parameters
    Ca_cyto_IC 1e-7

    Ca_ER_IC 150e-6

    Ca_ECS_IC 0

    Bf_IC 4791

    Bm_IC 2e-5

    n_NMDAR 56

    NMDAR_IC 150

    VSCC_IC 2

    PMCA_IC_HEAD 998

    PMCA_IC_NECK 998

    NCX_IC_HEAD 142

    NCX_IC_NECK 142

    SERCA_IC 1000

    k_CaBm_f 1e6

    k_CaBm_r 1

    k_Ca_N 50

    k_Ca_Bf_f 1e6

    k_Ca_Bf_r 2

    k_SA_leak 0.1608

    k_PMCA_1 1.5e8

    k_PMCA_2 15

    k_PMCA_3 12

    k_PMCA_leak 4.3

    k_NCX_1 3e8

    k_NCX_2 300

    k_NCX_3 600

    k_NCX_leak 19.4

    k_SERCA_x0x1 2e8

    k_SERCA_x1x0 83.7

    k_SERCA_x1x2 1e8

    k_SERCA_x2x1 167.4

    k_SERCA_x2y2 0.6

    k_SERCA_y2x2 0.097

    k_SERCA_x0y0 1.2e-3

    k_SERCA_y0x0 0.4

    k_SERCA_y0y1 12

    k_SERCA_y1y0 30.02

    k_SERCA_y1y2 6

    k_SERCA_y2y1 60.04

    k_SERCA_leak 0.1608

    k_C0C1 2e7

    k_C1C0 11

    k_C1C2 1e7

    k_C2C1 22

    k_C20 93

    k_0C2 183.2

    k_C20b 97

    k_0C2b 574

    k_C2D 16.8

    k_DC2 3.6

    k_AMPAR_C0C1 9.18e6

    k_AMPAR_C1C0 8520

    k_AMPAR_C1C2 5.68e7

    k_AMPAR_C2C1 6520

    k_AMPAR_C20 8480

    k_AMPAR_0C2 1800

    k_AMPAR_C3C4 2.54e6

    k_AMPAR_C4C3 91.4

    k_AMPAR_C1C3 5780

    k_AMPAR_C3C1 78.4

    k_AMPAR_C2C4 344

    k_AMPAR_C4C2 1.45

    k_AMPAR_0C5 35.4

    k_AMPAR_C50 8

    k_AMPAR_C4C5 33.6

    k_AMPAR_C5C4 380.8

    AMPAR_IC 1200

    n_AMPAR 441

    n_glu1 367

    alpha 650

    beta 60

    gamma 5

    delta 75

    delta1 600

    k_AB 30000000

    k_AU 333

    k_IO 250000

    k_IC 450000

    k_IU 1

    k_FluxRyR 1.09e9

    n_glu2 426

end parameters

begin molecule types
    Ca2
    Bm
    CaBm
    Bf
    CaBf
    VSCC
    PMCA
    PMCA1
    NCX
    NCX1
    SERCAx
    SERCAx1
    SERCAx2
    SERCAy
    SERCAy1
    SERCAy2
    VSCC_0
    VSCC_1
    VSCC_2
    VSCC_3
    NMDAR_0
    NMDAR_1
    NMDAR_2
    NMDAR_D
    NMDAR_0B
    NMDAR_1B
    NMDAR_2B
    NMDAR_DB
    NMDAR
    NMDAR_B
    AMPAR_0
    AMPAR_1
    AMPAR_2
    AMPAR_3
    AMPAR_4
    AMPAR_5
    AMPAR
    glu
    Ca2_ER
    RyR_C(a~0~1~2~3~4,i~0~1~2~3~4)
    RyR_O(a~0~1~2~3~4,i~0~1~2~3~4)
    RyR_CI(a~0~1~2~3~4,i~0~1~2~3~4)
    RyR_OI(a~0~1~2~3~4,i~0~1~2~3~4)
end molecule types

begin reaction rules
    Ca2 + Bm <-> CaBm k_CaBm_f, k_CaBm_r
    Ca2Null: Ca2 -> 0 k_Ca_N
    Ca2@IN + Bf <-> CaBf k_Ca_Bf_f, k_Ca_Bf_r
#     reaction 'rxn_VSCC' was generated as Python code because it contains features not supported by BNGL
    Ca2@IN + PMCA <-> PMCA1 k_PMCA_1, k_PMCA_2
    rxn_PMCA: PMCA1 -> PMCA k_PMCA_3
    rxn_PMCA_leak: PMCA -> PMCA + Ca2@IN k_PMCA_leak
    Ca2@IN + NCX <-> NCX1 k_NCX_1, k_NCX_2
    rxn_NCX: NCX1 -> NCX k_NCX_3
    rxn_NCX_leak: NCX -> NCX + Ca2@IN k_NCX_leak
    rxn_SERCA1f: SERCAx + Ca2@OUT -> SERCAx1 k_SERCA_x0x1
    rxn_SERCA1r: SERCAx1 -> SERCAx + Ca2@OUT k_SERCA_x1x0
    rxn_SERCA2f: SERCAx1 + Ca2@OUT -> SERCAx2 k_SERCA_x1x2
    rxn_SERCA2r: SERCAx2 -> SERCAx1 + Ca2@OUT k_SERCA_x2x1
    SERCAx2 <-> SERCAy2 k_SERCA_x2y2, k_SERCA_y2x2
    SERCAy2 <-> SERCAy1 + Ca2_ER@IN k_SERCA_y2y1, k_SERCA_y1y2
    SERCAy1 <-> SERCAy + Ca2_ER@IN k_SERCA_y1y0, k_SERCA_y0y1
    SERCAy <-> SERCAx k_SERCA_y0x0, k_SERCA_x0y0
#     reaction '' was generated as Python code because it contains features not supported by BNGL
#     reaction '' was generated as Python code because it contains features not supported by BNGL
#     reaction '' was generated as Python code because it contains features not supported by BNGL
#     reaction '' was generated as Python code because it contains features not supported by BNGL
    NMDAR_0 + glu@OUT <-> NMDAR_1 k_C0C1, k_C1C0
    NMDAR_1 + glu@OUT <-> NMDAR_2 k_C1C2, k_C2C1
    NMDAR_2 <-> NMDAR k_C20, k_0C2
    NMDAR_2 <-> NMDAR_D k_C2D, k_DC2
    NMDAR_0B + glu@OUT <-> NMDAR_1B k_C0C1, k_C1C0
    NMDAR_1B + glu@OUT <-> NMDAR_2B k_C1C2, k_C2C1
    NMDAR_2B <-> NMDAR_B k_C20b, k_0C2b
    NMDAR_2B <-> NMDAR_DB k_C2D, k_DC2
#     reaction '' was generated as Python code because it contains features not supported by BNGL
#     reaction 'rxn_NMDAR' was generated as Python code because it contains features not supported by BNGL
    AMPAR_0 + glu@OUT <-> AMPAR_1 k_AMPAR_C0C1, k_AMPAR_C1C0
    AMPAR_1 + glu@OUT <-> AMPAR_2 k_AMPAR_C1C2, k_AMPAR_C2C1
    AMPAR_2 <-> AMPAR k_AMPAR_C20, k_AMPAR_0C2
    AMPAR_1 <-> AMPAR_3 k_AMPAR_C1C3, k_AMPAR_C3C1
    AMPAR_3 + glu@OUT <-> AMPAR_4 k_AMPAR_C3C4, k_AMPAR_C4C3
    AMPAR_2 <-> AMPAR_4 k_AMPAR_C2C4, k_AMPAR_C4C2
    AMPAR_4 <-> AMPAR_5 k_AMPAR_C4C5, k_AMPAR_C5C4
    AMPAR_5 <-> AMPAR k_AMPAR_C50, k_AMPAR_0C5
#     reaction '' was generated as Python code because it contains features not supported by BNGL
#     reaction '' was generated as Python code because it contains features not supported by BNGL
#     reaction '' was generated as Python code because it contains features not supported by BNGL
#     reaction '' was generated as Python code because it contains features not supported by BNGL
#     reaction '' was generated as Python code because it contains features not supported by BNGL
#     reaction 'rxn_SERCA_leak' was generated as Python code because it contains features not supported by BNGL
    RyR_C(a~0) + Ca2@OUT <-> RyR_C(a~1) 4*k_AB, 1*k_AU
    RyR_C(a~1) + Ca2@OUT <-> RyR_C(a~2) 3*k_AB, 2*k_AU
    RyR_C(a~2) + Ca2@OUT <-> RyR_C(a~3) 2*k_AB, 3*k_AU
    RyR_C(a~3) + Ca2@OUT <-> RyR_C(a~4) 1*k_AB, 4*k_AU
    RyR_C(i~0) + Ca2@OUT <-> RyR_C(i~1) 4*k_IC, 1*k_IU
    RyR_C(i~1) + Ca2@OUT <-> RyR_C(i~2) 3*k_IC, 2*k_IU
    RyR_C(i~2) + Ca2@OUT <-> RyR_C(i~3) 2*k_IC, 3*k_IU
    RyR_C(i~3) + Ca2@OUT <-> RyR_C(i~4) 1*k_IC, 4*k_IU
    RyR_O(a~0) + Ca2@OUT <-> RyR_O(a~1) 4*k_AB, 1*k_AU
    RyR_O(a~1) + Ca2@OUT <-> RyR_O(a~2) 3*k_AB, 2*k_AU
    RyR_O(a~2) + Ca2@OUT <-> RyR_O(a~3) 2*k_AB, 3*k_AU
    RyR_O(a~3) + Ca2@OUT <-> RyR_O(a~4) 1*k_AB, 4*k_AU
    RyR_O(i~0) + Ca2@OUT <-> RyR_O(i~1) 4*k_IO, 1*k_IU
    RyR_O(i~1) + Ca2@OUT <-> RyR_O(i~2) 3*k_IO, 2*k_IU
    RyR_O(i~2) + Ca2@OUT <-> RyR_O(i~3) 2*k_IO, 3*k_IU
    RyR_O(i~3) + Ca2@OUT <-> RyR_O(i~4) 1*k_IO, 4*k_IU
    RyR_CI(a~0) + Ca2@OUT <-> RyR_CI(a~1) 4*k_AB, 1*k_AU
    RyR_CI(a~1) + Ca2@OUT <-> RyR_CI(a~2) 3*k_AB, 2*k_AU
    RyR_CI(a~2) + Ca2@OUT <-> RyR_CI(a~3) 2*k_AB, 3*k_AU
    RyR_CI(a~3) + Ca2@OUT <-> RyR_CI(a~4) 1*k_AB, 4*k_AU
    RyR_CI(i~0) + Ca2@OUT <-> RyR_CI(i~1) 4*k_IC, 1*k_IU
    RyR_CI(i~1) + Ca2@OUT <-> RyR_CI(i~2) 3*k_IC, 2*k_IU
    RyR_CI(i~2) + Ca2@OUT <-> RyR_CI(i~3) 2*k_IC, 3*k_IU
    RyR_CI(i~3) + Ca2@OUT <-> RyR_CI(i~4) 1*k_IC, 4*k_IU
    RyR_OI(a~0) + Ca2@OUT <-> RyR_OI(a~1) 4*k_AB, 1*k_AU
    RyR_OI(a~1) + Ca2@OUT <-> RyR_OI(a~2) 3*k_AB, 2*k_AU
    RyR_OI(a~2) + Ca2@OUT <-> RyR_OI(a~3) 2*k_AB, 3*k_AU
    RyR_OI(a~3) + Ca2@OUT <-> RyR_OI(a~4) 1*k_AB, 4*k_AU
    RyR_OI(i~0) + Ca2@OUT <-> RyR_OI(i~1) 4*k_IO, 1*k_IU
    RyR_OI(i~1) + Ca2@OUT <-> RyR_OI(i~2) 3*k_IO, 2*k_IU
    RyR_OI(i~2) + Ca2@OUT <-> RyR_OI(i~3) 2*k_IO, 3*k_IU
    RyR_OI(i~3) + Ca2@OUT <-> RyR_OI(i~4) 1*k_IO, 4*k_IU
    RyR_O(a~0) -> RyR_C(a~0) beta
    RyR_O(a~1) -> RyR_C(a~1) beta
    RyR_O(a~2) -> RyR_C(a~2) beta
    RyR_O(a~3) -> RyR_C(a~3) beta
    RyR_C(a~4) <-> RyR_O(a~4) alpha, beta
    RyR_CI <-> RyR_OI alpha, beta
    RyR_CI(i~0) -> RyR_C(i~0) gamma
    RyR_C(i~1) <-> RyR_CI(i~1) delta1, gamma
    RyR_C(i~2) <-> RyR_CI(i~1) delta1, gamma
    RyR_C(i~3) <-> RyR_CI(i~3) delta1, gamma
    RyR_C(i~4) <-> RyR_CI(i~4) delta1, gamma
    RyR_OI(i~0) -> RyR_O(i~0) gamma
    RyR_O(i~1) <-> RyR_OI(i~1) delta, gamma
    RyR_O(i~2) <-> RyR_OI(i~2) delta, gamma
    RyR_O(i~3) <-> RyR_OI(i~3) delta, gamma
    RyR_O(i~4) <-> RyR_OI(i~4) delta, gamma
    Ca2_ER@IN + RyR_O <-> RyR_O + Ca2@OUT k_FluxRyR, k_FluxRyR
end reaction rules

